CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "txred")
    Name to assign these images:cellmaskorange
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,95
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:nucleioutline
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:nuclei
    Name the output image:nucleioutline_overlay
    Outline display mode:Color
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    Width of outlines:3
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:cellmaskorange
    Name the primary objects to be identified:primcellmaskorange
    Typical diameter of objects, in pixel units (Min,Max):30,600
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Name the outline image:primcellmaskorangeoutline
    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:primcellmaskorange
    Name the objects to be identified:secondarycellmaskorange
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:cellmaskorange
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    Name the outline image:secondaryCellMaskOrangeOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureImageAreaOccupied:[module_num:9|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:primcellmaskorange
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:secondarycellmaskorange
    Retain a binary image of the object regions?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Select objects to measure:primcellmaskorange
    Select objects to measure:secondarycellmaskorange
    Calculate the Zernike features?:No

RelateObjects:[module_num:11|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
    Select the input child objects:Nuclei
    Select the input parent objects:secondarycellmaskorange
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:12|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
    Select the input child objects:Nuclei
    Select the input parent objects:primcellmaskorange
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:nucleioutline
    Text color:#80FFFF
    Name the output image that has the measurements displayed:DisplayImage1
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cellmaskorange
    Name the output image:overlyoutlines
    Outline display mode:Color
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    Width of outlines:3
    Select outlines to display:nucleioutline
    Select outline color:blue
    Load outlines from an image or objects?:Image
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    Select outlines to display:primcellmaskorangeoutline
    Select outline color:#FF8040
    Load outlines from an image or objects?:Image
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    Select outlines to display:secondaryCellMaskOrangeOutlines
    Select outline color:yellow
    Load outlines from an image or objects?:Image
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cellmaskorange
    Name the output image:cellbodyoutlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:primcellmaskorange

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:secondarycellmaskorange
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:secondaryCellMaskOrangeOutlines
    Text color:#80FFFF
    Name the output image that has the measurements displayed:DisplayImage2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:overlyoutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:cellmaskorange
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:18|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
    Database type:MySQL / CSV
    Database name:DefaultDB
    Add a prefix to table names?:Yes
    Table prefix:Myexpt_
    SQL file prefix:SQL_
    Output file location:Default Output Folder|cp2db
    Create a CellProfiler Analyst properties file?:Yes
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
    Calculate the per-well mean values of object measurements?:Yes
    Calculate the per-well median values of object measurements?:Yes
    Calculate the per-well standard deviation values of object measurements?:Yes
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Myexpt_
    Which objects should be used for locations?:secondarycellmaskorange
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:primcellmaskorange|Number_Object_Number,primcellmaskorange|Location_Center_Y,primcellmaskorange|Location_Center_X,primcellmaskorange|AreaShape_Perimeter,primcellmaskorange|AreaShape_FormFactor,primcellmaskorange|AreaShape_Center_Y,primcellmaskorange|AreaShape_Center_X,primcellmaskorange|AreaShape_MaxFeretDiameter,primcellmaskorange|AreaShape_MinFeretDiameter,primcellmaskorange|AreaShape_Solidity,primcellmaskorange|AreaShape_EulerNumber,primcellmaskorange|AreaShape_Eccentricity,primcellmaskorange|AreaShape_Compactness,primcellmaskorange|AreaShape_Extent,primcellmaskorange|AreaShape_Orientation,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
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